PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = symmetryspan_textprompts
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Routines
  Routine instr1
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    TextComponent text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will try to memorize the position of colored squares you see on the screen while you also make judgments about other pictures. In the next few minutes, you will have some practice to get you familiar with how the experiment works.

        We will begin by practicing the "square" part of the experiment.


        Click to continue.
  Routine instr2
    TextComponent text_2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        For this practice set, squares will appear on the screen one at a time. Try to remember where each square was, in the order it was presented in. After 2 squares have been shown, you will see a grid of the 16 possible places the squares could have been. Your job is to select each square in the order presented.

        To do this, use the mouse to select the appropriate boxes. The squares you select will turn red.

        Click the mouse button to continue.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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  Routine instr3
    TextComponent text_3
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        When you have selected all the squares, and they are in the correct order, hit the EXIT box at the bottom right of the screen. If you made a mistake, hit the CLEAR box to start over. If you forget one of the squares, click the BLANK box to mark the spot for the missing square. Remember, it is very important to get the squares in the same order as you see them. If you forget one, use the BLANK box to mark the position.

        Do you have any questions so far?

        When you are ready, click the mouse button to start the square practice.
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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  Routine syminstr1
    TextComponent text_4
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Now you will practice doing the symmetry part of the experiment.

        A picture will appear on the screen, and you will have to decide if it is symmetrical. A picture is symmetrical if you can fold it in half vertically and the picture on the left lines up with the picture on the right.

        On the next screen you will see a picture that is symmetrical.

        Click the mouse to continue.
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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  Routine syminstr2
    TextComponent text_5
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Notice that this picture is symmetrical about the red line. In the real pictures the red line will not be present.

        Click the mouse to continue.
    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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  Routine syminstr3
    TextComponent text_6
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Here, the picture is NOT symmetrical. If you folded this across the red line, the boxes would NOT line up.

        Click the mouse to continue.
    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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  Routine syminstr4
    TextComponent text_7
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        This is another example of a picture that IS symmetrical. If you folded it vertically, the two sides would line up.

        Click the mouse to continue.
    MouseComponent mouse_7
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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  Routine syminstr5
    TextComponent text_8
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Here is another example of a picture that is NOT symmetrical. Notice that if folded, the two sides would not line up.

        If you have any questions about how symmetry works, please ask them now.

        Click the mouse to continue.
    MouseComponent mouse_8
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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Flow
  Routine instr1
  Routine instr2
  Routine instr3
  Routine syminstr1
  Routine syminstr2
  Routine syminstr3
  Routine syminstr4
  Routine syminstr5
